PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1368, 912]
  color = $[-1.0000, -1.0000, -1.0000]
  expName = Circle_SDT
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Routines
  Routine trial
    TextComponent text_3
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 1.0
      text [set every repeat] = +
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    ImageComponent image
      image [set every repeat] = $Stimuli_file
      pos [set every repeat] = Stim_place
      size [set every repeat] = (0.1, 0.1)
      startVal [time (s)] = 2
      stopVal [duration (s)] = .5
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      stopVal [duration (s)] = 2.5
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  Routine Start
    TextComponent text
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this experiment you will be asked to press the 'space' key when a circle appears on the screen and with-hold a response when a square appears.
        This experiment will begin with Condition 1.

        Condition 1: A square (no-go) and a circle (go) will appear in the center of the screen.
        Condition 2: A square (no-go) and a circle (go) will appear at 1 of the corners of the screen.

        If you understand the instructions press the 'y' key to move onto condition 1.
    KeyboardComponent key_resp
      allowedKeys [set every repeat] = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Condition_2
    TextComponent text_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Condition 2 will begin now.

        Press the 'space' key when a circle appears at one of the four corners of the screen.

        If you understand these instructions press 'y'
    KeyboardComponent key_resp_3
      allowedKeys = 'y'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Start
  LoopInitiator Condition_1 loopType="TrialHandler"
    conditionsFile = Still_condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Still', 'Trial': 'go', 'Location': (0, 0), 'Stimuli_file': 'grey_circle.png'}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
    Routine trial
  LoopTerminator Condition_1
  Routine Condition_2
  LoopInitiator Second_Condition loopType="TrialHandler"
    conditionsFile = Move_condition.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Condition': 'Move', 'Trial': 'go', 'Location': (-0.5, -0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (-0.5, -0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (-0.5, -0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (-0.5, -0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (-0.5, 0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (-0.5, 0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (-0.5, 0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (-0.5, 0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (0.5, 0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (0.5, 0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (0.5, 0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (0.5, 0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (0.5, -0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (0.5, -0.5), 'Stimuli_file': 'grey_circle.png'},
      {'Condition': 'Move', 'Trial': 'go', 'Location': (0.5, -0.5), 'Stimuli_file': 'grey_circle.png'}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
    Routine trial
  LoopTerminator Second_Condition
